celsius = 35

begintemplate CA1
  external lambda_f

  // Define number of neuronal compartments
  numbasal = 61
  numapical = 53
  numuser5 = 42
  numaxon = 1
  numsoma = 1

  create axon[numaxon]
  create soma[numsoma]
  create dendrite[numbasal]
  create apical_dendrite[numapical]
  create user5[numuser5]
  objref all

  public soma, axon, dendrite, apical_dendrite, user5, all

  proc init() {
    // Define cell morphology
    ca1_morphology()
    // Define cell biophysics
    ca1_biophysics()
  }

  proc set_nseg() {
    forsec all {
      nseg = int((L / ($1 * lambda_f(100)) + .9) / 2) * 2 + 1
    }
  }

  proc ca1_biophysics() { local i
    print "Inserting biophysical mechanisms"

    numbasal = 61
    numapical = 53
    numuser5 = 42
    numaxon = 1
    numsoma = 1

    Rm = 28000
    RmDend = Rm
    RmSoma = Rm
    RmAx = Rm

    Cm = 1
    CmSoma = Cm
    CmAx = Cm
    CmDend = Cm

    RaAll = 150
    RaSoma = 150  
    RaAx = 50
    Vrest = -65

    for i = 0, numaxon - 1 axon[i] {
      insert pas e_pas=Vrest g_pas = 1/RmAx Ra=RaAx cm=CmAx
    }

    for i = 0, numsoma - 1 soma[i] {
      insert pas e_pas=Vrest g_pas = 1/RmSoma Ra=RaSoma cm=CmSoma
    }

    for i = 0, numbasal - 1 dendrite[i] {
      insert pas e_pas=Vrest g_pas = 1/RmDend Ra=RaAll cm=CmDend
    }

    for i = 0, numapical - 1 apical_dendrite[i] {
      insert pas e_pas=Vrest g_pas = 1/RmDend Ra=RaAll cm=CmDend
    }

    for i = 0, numuser5 - 1 user5[i] {
      insert pas e_pas=Vrest g_pas = 1/RmDend Ra=RaAll cm=CmDend
    }

    // chop each section into smallest odd number of segments
    // such no segment is longer than D_LAMBDA * lambda_100Hz
    D_LAMBDA = 0.1
    set_nseg(D_LAMBDA)

    access soma[0]
    distance()

    gna = 0.06
    AXONM = 5
    gkdr = 0.01
    KMULT = 0.01
    KMULTP = 0.01
    ghd = 0.00005

    // AXON
    for i = 0, numaxon - 1 axon[i] {
      insert nax gbar_nax=gna*AXONM
      insert kdr gkdrbar_kdr=gkdr
      insert kap gkabar_kap=KMULTP
    }

    // SOMA
    for i = 0, numsoma - 1 soma[i] {
      insert hd ghdbar_hd=ghd vhalfl_hd=-73
      insert na3 gbar_na3=gna
      insert kdr gkdrbar_kdr=gkdr
      insert kap gkabar_kap=KMULTP
    }

    // BASAL DENDRITES
    for i = 0, numbasal - 1 dendrite[i] {
      insert hd ghdbar_hd=ghd vhalfl_hd=-73
      insert na3 gbar_na3=gna
      insert kdr gkdrbar_kdr=gkdr
      insert kap gkabar_kap=0
      insert kad gkabar_kad=0

      for(x) if(x > 0 && x < 1) {
        xdist = distance(x)
        ghdbar_hd(x) = ghd*(1+3*xdist/100)
        if(xdist > 100){
          vhalfl_hd=-81
          gkabar_kad(x) = KMULT*(1+xdist/100)
        } else {
          vhalfl_hd=-73
          gkabar_kap(x) = KMULTP*(1+xdist/100)
        }
      }
    }

    // APICAL DENDRITE
    for i = 0, numapical - 1 apical_dendrite[i] {
      insert hd ghdbar_hd=ghd
      insert na3 gbar_na3=gna
      insert kdr gkdrbar_kdr=gkdr
      insert kap gkabar_kap=0
      insert kad gkabar_kad=0

      for(x) if(x > 0 && x < 1) {
        xdist = distance(x)
        ghdbar_hd(x) = ghd*(1+3*xdist/100)
        if(xdist > 100) {
          vhalfl_hd=-81
          gkabar_kad(x) = KMULT*(1+xdist/100)
        } else {
          vhalfl_hd=-73
          gkabar_kap(x) = KMULTP*(1+xdist/100)
        }
      }
    }

    // USER5
    for i = 0, numuser5 - 1 user5[i] {
      insert hd ghdbar_hd=ghd
      insert na3 gbar_na3=gna
      insert kdr gkdrbar_kdr=gkdr
      insert kap gkabar_kap=0
      insert kad gkabar_kad=0

      for(x) if(x > 0 && x < 1) {
        xdist = distance(x)
        ghdbar_hd(x) = ghd*(1+3*xdist/100)
        if(xdist > 100) {
          vhalfl_hd=-81
          gkabar_kad(x) = KMULT*(1+xdist/100)
        } else {
          vhalfl_hd=-73
          gkabar_kap(x) = KMULTP*(1+xdist/100)
        }
      }
    }
  }

  proc ca1_morphology() {
    print "Setting up cell morphology"

    numbasal = 61
    numapical = 53
    numuser5 = 42
    numaxon = 1
    numsoma = 1

    all = new SectionList()

    soma[0] all.append()
    axon[0] all.append()

    for i = 0, numbasal - 1 dendrite[i] all.append()
    for i = 0, numapical - 1 apical_dendrite[i] all.append()
    for i = 0, numuser5 - 1 user5[i] all.append()

    access soma[0]
    pt3dclear()
    pt3dadd(0.647,-0.235,0.157,15.702)
    pt3dadd(0.647,-0.235,15.859,15.702)

    soma[0] connect axon[0](0), 1
    access axon[0]
    pt3dclear()
    pt3dadd(-0.568,-1,-0.023,1.5)
    pt3dadd(3.5,7,7,1)
    pt3dadd(5.5,14,7,1)
    pt3dadd(6.5,22.5,6,1)
    pt3dadd(6,29.5,7,1)
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  }

endtemplate CA1
